<?xml version="1.0" encoding="utf-8"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4" id="Ca4RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4" id="Ca3RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR4" id="Ca2RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR4" id="Ca1RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4" id="RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4O" id="Ca3RyR4O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4O" id="Ca4RyR4O" kdiff="0" kdiffunit="mu2/s"/>

<Reaction name="RyRb" id="RyRb">
    <Reactant specieID="Ca3RyR4"/>
    <Product specieID="Ca3RyR4O"/>
    <forwardRate>762.62</forwardRate>
    <reverseRate>0.001</reverseRate>
  </Reaction>


   
 <Reaction name="RyRd" id="RyRd">
    <Reactant specieID="Ca4RyR4"/>
    <Product specieID="Ca4RyR4O"/>
    <forwardRate>762.62</forwardRate>
    <reverseRate>0.001</reverseRate>
  </Reaction>

  <Reaction name="RyRg" id="RyRg">
   
    <Reactant specieID="Ca"/>
    <Reactant specieID="Ca3RyR4"/>
    <Product specieID="Ca4RyR4"/>
    <forwardRate>1.0637647852838967 </forwardRate>
    <reverseRate>1.064e3</reverseRate>
  </Reaction>

  <Reaction name="RyRh" id="RyRh">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Ca3RyR4O"/>
    <Product specieID="Ca4RyR4O"/>
    <forwardRate>1.0637647852838967 </forwardRate>
    <reverseRate>1.064e3</reverseRate>
  </Reaction>

  <Reaction name="RyRh1" id="RyRh1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Ca2RyR4"/>
    <Product specieID="Ca3RyR4"/>
    <forwardRate>1.0637647852838967 </forwardRate>
    <reverseRate>1.064e3</reverseRate>
  </Reaction>


  <Reaction name="RyRh2" id="RyRh2">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Ca1RyR4"/>
    <Product specieID="Ca2RyR4"/>
    <forwardRate>1.0637647852838967 </forwardRate>
    <reverseRate>1.064e3</reverseRate>
  </Reaction>

  <Reaction name="RyRh3" id="RyRh3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR4"/>
    <Product specieID="Ca1RyR4"/>
    <forwardRate>1.0637647852838967 </forwardRate>
    <reverseRate>1.064e3</reverseRate>
  </Reaction>

  
  <Specie name="DMN_buf" id="DMN_buf" kdiff="150" kdiffunit="mu2/s"/>
  <Specie name="CaDMN_buf" id="CaDMN_buf" kdiff="150" kdiffunit="mu2/s"/>
  <!--Faas GC, Karacs K, Vergara JL, Mody I. Kinetic properties of DM-nitrophen binding to calcium and magnesium. Biophys J. 2005 Jun;88(6):4421-33. doi: 10.1529/biophysj.104.057745. Epub 2005 Mar 18. PMID: 15778435; PMCID: PMC1305669.-->
   <Reaction name="DMNtrans" id="DMNtrans">
     <Reactant specieID="DMN_buf"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaDMN_buf"/>
    <forwardRate>80e-6</forwardRate>
    <reverseRate>0.4e-3</reverseRate>
   </Reaction>

</ReactionScheme>
