<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <!-- <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/> -->
  <Specie name="CaM" id="CaM" kdiff="4." kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4." kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4." kdiffunit="mu2/s"/>
  <Specie name="RyR"        id="RyR"           kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="RyR1CaM"    id="RyR1CaM"    kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM"  id="RyR2CaM"      kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaM"  id="RyR3CaM"      kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaM"  id="RyR4CaM"      kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="RyR1CaMCa2C"    id="RyR1CaMCa"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa2C"  id="RyR2CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMCa2C"  id="RyR3CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMCa2C"  id="RyR4CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR1CaMCa4"    id="RyR1CaMCa4"   kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa4"  id="RyR2CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMCa4"  id="RyR3CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMCa4"  id="RyR4CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Ca1RyR1CaMCa2C"    id="Ca1RyR1CaMCa"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR2CaMCa2C"  id="Ca1RyR2CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR3CaMCa2C"  id="Ca1RyR3CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR4CaMCa2C"  id="Ca1RyR4CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR1CaMCa4"    id="Ca1RyR1CaMCa4"   kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR2CaMCa4"  id="Ca1RyR2CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR3CaMCa4"  id="Ca1RyR3CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR4CaMCa4"  id="Ca1RyR4CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Ca2RyR1CaMCa2C"    id="Ca2RyR1CaMCa"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR2CaMCa2C"  id="Ca2RyR2CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR3CaMCa2C"  id="Ca2RyR3CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR4CaMCa2C"  id="Ca2RyR4CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR1CaMCa4"    id="Ca2RyR1CaMCa4"   kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR2CaMCa4"  id="Ca2RyR2CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR3CaMCa4"  id="Ca2RyR3CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR4CaMCa4"  id="Ca2RyR4CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Ca3RyR1CaMCa2C"    id="Ca3RyR1CaMCa"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR2CaMCa2C"  id="Ca3RyR2CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR3CaMCa2C"  id="Ca3RyR3CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4CaMCa2C"  id="Ca3RyR4CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR1CaMCa4"    id="Ca3RyR1CaMCa4"   kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR2CaMCa4"  id="Ca3RyR2CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR3CaMCa4"  id="Ca3RyR3CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4CaMCa4"  id="Ca3RyR4CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
<!-- Can be open-->
  <Specie name="Ca4RyR1CaMCa2C"    id="Ca4RyR1CaMCa"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR2CaMCa2C"  id="Ca4RyR2CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR3CaMCa2C"  id="Ca4RyR3CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4CaMCa2C"  id="Ca4RyR4CaMCa2C"     kdiff="0" kdiffunit="mu2/s"/>
  <!-- Inactivation-->
  <Specie name="Ca4RyR1CaMCa4"    id="Ca4RyR1CaMCa4"   kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR2CaMCa4"  id="Ca4RyR2CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR3CaMCa4"  id="Ca4RyR3CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4CaMCa4"  id="Ca4RyR4CaMCa4"     kdiff="0" kdiffunit="mu2/s"/>


  <!--1) CaM  + 2Ca
      <-> CaMCa2 -->
  <!--This is the C site-->
  <Reaction name="CaMC_bind" id="CaMC_bind">
    <Reactant specieID="CaM" />
    <Reactant specieID="Ca" n="2" />
    <Product specieID="CaMCa2C" />
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
    <Reactant specieID="CaMCa2C" />
    <Reactant specieID="Ca" n="2" />
    <Product specieID="CaMCa4" />
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

 
  <!-- also in lit, -->
  <Reaction name = "RyRApoCaM1" id="RyRApoCaM1">
     <Reactant specieID="RyR"/>
     <Reactant specieID="CaM"/>
     <Product specieID="RyR1CaM"/>
     <forwardRate>2.4e-7</forwardRate>
     <reverseRate>1.73e-5</reverseRate>
   </Reaction>
   <!-- calculated from Balshaw
	kon 3.15e-7 nM-1ms-1 (koff 3.67e-8) ( 
   -->
 <Reaction name = "RyRApoCaM2" id="RyRApoCaM2">
     <Reactant specieID="RyR1CaM"/>
     <Reactant specieID="CaM"/>
     <Product specieID="RyR2CaM"/>
     <forwardRate>2.4e-7</forwardRate>
     <reverseRate>1.73e-5</reverseRate>
   </Reaction>
   <!-- calculated from Balshaw
	kon 3.15e-7 nM-1ms-1 (koff 3.67e-8) ( 
   -->
 <Reaction name = "RyRApoCaM3" id="RyRApoCaM3">
     <Reactant specieID="RyR2CaM"/>
     <Reactant specieID="CaM"/>
     <Product specieID="RyR3CaM"/>
     <forwardRate>2.4e-7</forwardRate>
     <reverseRate>1.73e-5</reverseRate>
   </Reaction>
   <!-- calculated from Balshaw
	kon 3.15e-7 nM-1ms-1 (koff 3.67e-8) ( 
   -->
 <Reaction name = "RyRApoCaM4" id="RyRApoCaM4">
     <Reactant specieID="RyR4CaM"/>
     <Reactant specieID="CaM"/>
     <Product specieID="RyR4CaM"/>
     <forwardRate>2.4e-7</forwardRate>
     <reverseRate>1.73e-5</reverseRate>
   </Reaction>
   <!-- calculated from Balshaw
	kon 3.15e-7 nM-1ms-1 (koff 3.67e-8) ( 
   -->



   <Reaction name = "RyRCaMCa2_1" id="RyRCaMCa2_1">
     <Reactant specieID="RyR"/>
     <Reactant specieID="CaMCa2C"/>
     <Product specieID="RyR1CaMCa2C"/>
     
     <forwardRate>3.15e-7</forwardRate>
     <reverseRate>3.67e-6</reverseRate>
   </Reaction>
   <!-- https://doi.org/10.1161/CIRCRESAHA.114.302857-->
   <Reaction name = "RyRCaMCa2_2" id="RyRCaMCa2_2">
     <Reactant specieID="RyR1CaMCa2C"/>
     <Reactant specieID="CaMCa2C"/>
     <Product specieID="RyR2CaMCa2C"/>
     <forwardRate>3.15e-7</forwardRate>
     <reverseRate>3.67e-6</reverseRate>
   </Reaction>
   <!-- https://doi.org/10.1161/CIRCRESAHA.114.302857-->
   <Reaction name = "RyRCaMCa2_3" id="RyRCaMCa2_3">
     <Reactant specieID="RyR2CaMCa2C"/>
     <Reactant specieID="CaMCa2C"/>
     <Product specieID="RyR3CaMCa2C"/>
     <forwardRate>3.15e-7</forwardRate>
     <reverseRate>3.67e-6</reverseRate>
   </Reaction>
   <!-- https://doi.org/10.1161/CIRCRESAHA.114.302857-->
   <Reaction name = "RyRCaMCa2_4" id="RyRCaMCa2_4">
     <Reactant specieID="RyR3CaMCa2C"/>
     <Reactant specieID="CaMCa2C"/>
     <Product specieID="RyR4CaMCa2C"/>
     <forwardRate>3.15e-7</forwardRate>
     <reverseRate>3.67e-6</reverseRate>
   </Reaction>
   <!-- https://doi.org/10.1161/CIRCRESAHA.114.302857-->

  
   <Reaction name = "RyRCaMCa4_1" id="RyRCaMCa4_1">
     <Reactant specieID="RyR"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR1CaMCa4"/>
 
     <forwardRate>3.66e-7</forwardRate>
     <reverseRate>1.28e-6</reverseRate>
   </Reaction>

   <Reaction name = "RyRCaMCa4_2" id="RyRCaMCa4_2">
     <Reactant specieID="RyR1CaMCa4"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR2CaMCa4"/>
     
     <forwardRate>3.66e-7</forwardRate>
     <reverseRate>1.28e-6</reverseRate>
   </Reaction>

   <Reaction name = "RyRCaMCa4_3" id="RyRCaMCa4_3">
     <Reactant specieID="RyR2CaMCa4"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR3CaMCa4"/>
     <forwardRate>3.66e-7</forwardRate>
     <reverseRate>1.28e-6</reverseRate>
   </Reaction>
   
   <Reaction name = "RyRCaMCa4_4" id="RyRCaMCa4_4">
     <Reactant specieID="RyR3CaMCa4"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR4CaMCa4"/>
     <forwardRate>3.66e-7</forwardRate>
     <reverseRate>1.28e-6</reverseRate>
   </Reaction>

   <!-- increase CaM affinity for Ca by a factor of 10-->
   <Reaction name="RyRCaM_2Ca_bind_1" id="RyRCaM_2Ca_bind_1">
       <Reactant specieID="RyR1CaM" />
       <Reactant specieID="Ca" n="2" />
       <Product specieID="RyR1CaMCa2C" />
       <forwardRate>6e-5</forwardRate>
       <reverseRate>9.1e-3</reverseRate>
       <Q10>0.2</Q10>
   </Reaction>






   <!-- increase CaM affinity for Ca by a factor of 10-->
   <Reaction name="RyRCaMCa2C_2Ca_bind" id="RyRCaMCa2C_2Ca_bind">
     
     <Reactant specieID="RyR1CaMCa2C" />
     <Reactant specieID="Ca" n="2" />
     <Product specieID="RyR1CaMCa4" />
     <forwardRate>0.1e-2</forwardRate>
     <reverseRate>1000e-3</reverseRate>
     <Q10>0.2</Q10>
   </Reaction>


 </ReactionScheme>
